CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):mKate
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:mKate
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):ERKKTR
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:ERKKTR
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    Rescale intensities?:No

Smooth:[module_num:2|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
    Select the input image:ERKKTR
    Name the output image:KTRSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:ERKKTR
    Name the primary objects to be identified:Embryo
    Typical diameter of objects, in pixel units (Min,Max):10,500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:10
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ConvertObjectsToImage:[module_num:4|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
    Select the input objects:Embryo
    Name the output image:Embryo_Image
    Select the color format:Grayscale
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
Morph:[module_num:5|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
    Select the input image:Embryo_Image
    Name the output image:InvertEmbryo_mage
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:InvertEmbryo_mage
    Name the primary objects to be identified:Background
    Typical diameter of objects, in pixel units (Min,Max):10,512
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:1
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
RescaleIntensity:[module_num:7|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
    Select the input image:mKate
    Name the output image:RescaledKate
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:RescaledKate
    Name the output image:EnhancedKate
    Select the operation:Enhance
    Feature size:3
    Feature type:Circles
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
Smooth:[module_num:9|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
    Select the input image:EnhancedKate
    Name the output image:BlurKate
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1.5
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
MaskImage:[module_num:10|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
    Select the input image:BlurKate
    Name the output image:MaskedmKate
    Use objects or an image as a mask?:Objects
    Select object for mask:Embryo
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:MaskedmKate
    Name the primary objects to be identified:prenuclei1
    Typical diameter of objects, in pixel units (Min,Max):10,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:4
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1
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    Masking objects:Embryo
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:prenuclei1
    Name the output objects:dnuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:dnuclei
    Name the output objects:nuclei
    Select the operation:Remove spurs
    Number of pixels by which to expand or shrink:2
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    Retain the outlines of the identified objects?:No
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:prenuclei1
    Name the objects to be identified:nucCytoringPre
    Select the method to identify the secondary objects:Distance - B
    Select the input image:ERKKTR
    Number of pixels by which to expand the primary objects:7
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:nucCytoringPre
    Name the output objects:nucCytoring
    Select the operation:Add partial dividing lines between objects
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    Retain the outlines of the identified objects?:No
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:nucCytoring
    Select the smaller identified objects:prenuclei1
    Name the tertiary objects to be identified:cytoring
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

SaveImages:[module_num:17|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
    Select the type of image to save:Objects
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    Select the objects to save:prenuclei1
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    Select method for constructing file names:From image filename
    Select image name for file prefix:mKate
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_prenuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:18|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
    Hidden:1
    Select an image to measure:ERKKTR
    Select objects to measure:nuclei
    Select objects to measure:cytoring
    Select objects to measure:Background
